PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = star_review_exp_code
  keyboardBackend = ioHub
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Routines
  Routine trial
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    TextComponent text_msg_enter_response
      color = 1.0000, 0.8431, 0.6078
      letterHeight = 0.03
      pos = (0, -0.45)
      startVal [time (s)] = 2
      text = Now you can enter your choice by pressing key 'a' (for Laptop A) or key 'b' (for Laptop B)
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    KeyboardComponent key_choise_response
      allowedKeys = 'a','b'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    TextComponent text_laptop_name_l1
      letterHeight = 0.06
      pos = (-0.4, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $laptop_name_l1
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    TextComponent text_laptop_name_l2
      letterHeight = 0.06
      pos = (0.4, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $laptop_name_l2
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    TextComponent text_price_l1
      letterHeight = 0.04
      pos = (-0.4, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Price: Rs " + str(value_l1) + "/-" 
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    TextComponent text_price_l2
      letterHeight = 0.04
      pos = (0.4, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Price: Rs " + str(value_l2) + "/-" 
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    TextComponent text_stars_l_1
      letterHeight = 0.04
      pos = (-0.4, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Rating: " + str(stars_l1) + "⭐" * int(stars_l1) 
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    TextComponent text_stars_l_2
      letterHeight = 0.04
      pos = (0.4, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Rating: " + str(stars_l2) + "⭐" * int(stars_l2) 
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    TextComponent text_review_1
      letterHeight = 0.025
      pos = (-0.4, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Reviews for " + laptop_name_l1 + ":            " + "\n\n\n - " + review_l1_1 + "\n\n - " + review_l1_2 + "\n\n - " + review_l1_3 + "\n\n - " + review_l1_4 + "\n\n - " + review_l1_5
      wrapWidth = 0.8
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    TextComponent text_review_2
      letterHeight = 0.025
      pos = (0.4, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 0.8
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      text [set every repeat]:
        $"Reviews for " + laptop_name_l2 + ":            " + "\n\n\n - " + review_l2_1 + "\n\n - " + review_l2_2 + "\n\n - " + review_l2_3 + "\n\n - " + review_l2_4 + "\n\n - " + review_l2_5
  Routine Intro
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    TextComponent text
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome to our research study! We are conducting an experiment to gain insights into consumer decision-making processes when considering products with similar specifications but different star ratings, reviews, and price points.

        Duration:
        The experiment is expected to take approximately 15-20 minutes to complete.

        Confidentiality:
        All data collected during the experiment will be kept confidential, and your personal information will not be disclosed.

        Contact Information:

        If you have any questions or concerns about the study, please feel free to contact:

        Sreenivas Bhumireddy Papireddy (sreenivas.bhumireddy@research.iiit.ac.in)

        Muskan Raina (muskan.raina@students.iiit.ac.in)

        Press space to continue
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions
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    TextComponent text_intructions
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Suppose you have Rs 2 lakh. You need to choose a laptop to buy for your college education. You will be presented with information about two products with certain star ratings, reviews, and prices.

        Choose option A or B based on which laptop you are more likely to purchase based on the given information.

        Assume all the laptops provided to you have the same specifications.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 10.0
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    TextComponent text_skip_message
      color = 0.9216, 0.9216, 0.7255
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 10
      text = Press space to continue
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  Routine consent
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    TextComponent text_consent
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Consent Form:

        I hereby agree to participate in the research study described above. I understand the general purpose of the experiment, and I am aware that my participation is voluntary.

        I acknowledge that:

        I have been provided with information about the experiment's procedures.
        I understand that the data collected during the experiment will be kept confidential and used solely for research purposes.
        I am free to withdraw from the experiment at any time without providing a reason.
        I agree to participate in the experiment and provide my responses as accurately and honestly as possible.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 5.0
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    TextComponent text_2
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 5.0
      text = Press the space bar if you consent to participate.
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  Routine small_break
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    TextComponent text_loading
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.2
      text = Loading Question
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  Routine end_task_msg
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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      text:
        Thank you for participating and investing your time!

        Your contribution to the experiment is deeply appreciated!
Flow
  Routine Intro
  Routine consent
  Routine instructions
  LoopInitiator questions loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'qid': 'expc1q1', 'laptop_name_l1': 'laptopA', 'value_l1': 149000, 'stars_l1': 4, 'specs_l1': None, 'review_l1_1': 'Long lasting battery, laser fast performance, very good display, and is excellent at multi-tasking.', 'review_l1_2': 'The product is elegant with a minimalistic design.', 'review_l1_3': "I'm impressed with this laptop, the battery lasts for a long time, and the performance is lightning-fast display is fantastic, making multitasking a breeze. The elegant design adds a touch of class to my setup.", 'review_l1_4': 'Received a damaged product, blue color patches (dots) on the screen, and the body is also improper. It looks like it is refurbished or repaired.', 'review_l1_5': 'Completely useless touchpad. It does not respond many times. It performs random clicks. Absolutely unusable.', 'laptop_name_l2': 'laptopB', 'value_l2': 124280, 'stars_l2': 4, 'specs_l2': None, 'review_l2_1': 'High-resolution display with vibrant colors and fast refresh rates.', 'review_l2_2': 'The touchpad is not responsive', 'review_l2_3': "The laptop is defective. It crashed and froze multiple times. In my opinion, I won't recommend it to anyone", 'review_l2_4': 'The laptop came with expired warranty.', 'review_l2_5': 'The keyboard is very uncomfortable to use.'},
      {'qid': 'expc1q2', 'laptop_name_l1': 'laptopA', 'value_l1': 101500, 'stars_l1': 3, 'specs_l1': None, 'review_l1_1': 'This laptop is a great choice for students and working professionals. It has a durable full metallic body and smooth keys that provide a great typing experience.', 'review_l1_2': 'This laptop is super fast for intermediate gaming and programs and should be bought. This laptop is a good choice', 'review_l1_3': 'The trackpad is large so definitely a good product. And the keyboard is very nice and the speakers are loud.', 'review_l1_4': 'Bought this laptop for office work. Immediately after setting the thing up the laptop was hot like a furnace and the charger was hot. Plus error messages of unrecognized chargers were shown. The laptop is a disgrace and a lot of time and effort went in vain.', 'review_l1_5': 'Great value-for-money laptop for software engineering students with high-end specifications.', 'laptop_name_l2': 'laptopB', 'value_l2': 23999, 'stars_l2': 3, 'specs_l2': None, 'review_l2_1': 'One of the worst laptops. Never buy this product for this laptop.', 'review_l2_2': 'Excellent laptop at a very cheap price. I bought it for my kid but also use it to do all my work. Except for high-end gaming, I can do all the work I want.', 'review_l2_3': 'Outdated and uncomfortable keyboard and touchpad.', 'review_l2_4': 'Disappointing audio quality with tinny speakers', 'review_l2_5': 'Frustratingly slow and unresponsive performance'},
      {'qid': 'expc2q1', 'laptop_name_l1': 'laptopA', 'value_l1': 99999, 'stars_l1': 4, 'specs_l1': None, 'review_l1_1': 'Cheap plastic construction that feels like it might break any moment', 'review_l1_2': 'Responsive touchpad and smooth scrolling', 'review_l1_3': 'Sluggish performance for multitasking or resource-intensive applications', 'review_l1_4': 'Lackluster audio quality', 'review_l1_5': 'Display quality could be better; colors appear washed out', 'laptop_name_l2': 'laptopB', 'value_l2': 71999, 'stars_l2': 4, 'specs_l2': None, 'review_l2_1': 'Great display, fast performance, and great gaming experience, also good for coding and other software development work.', 'review_l2_2': "The biggest drawback is the trackpad, when I use it the mouse is moved automatically. It was the most irritating part of this laptop, I thought it might be a software glitch but it is not getting solved. I'm not sure how to get out of this issue.", 'review_l2_3': 'Its specs meet my bare minimum requirements at the best price.', 'review_l2_4': 'This is an allrounder for coding and gaming. Go for this laptop.', 'review_l2_5': "So far so good, been using this for the last 6-7 days. I've done heavy gaming and it does heat a bit but the thermals of this laptop are quite good. The fans are really good and don't make much noise. It can run all of your heavy games at max or close to max settings."},
      {'qid': 'expc2q2', 'laptop_name_l1': 'laptopA', 'value_l1': 75000, 'stars_l1': 3, 'specs_l1': None, 'review_l1_1': 'Long-lasting battery life; perfect for on-the-go professionals', 'review_l1_2': "Cheap plastic build; doesn't feel durable.", 'review_l1_3': 'Powerful performance; handles multitasking with ease.', 'review_l1_4': 'Battery life is disappointing; needs frequent charging.', 'review_l1_5': 'Dim and dull display; not suitable for media consumption.', 'laptop_name_l2': 'laptopB', 'value_l2': 62000, 'stars_l2': 3, 'specs_l2': None, 'review_l2_1': 'Powerful laptop with a compact and lightweight design.', 'review_l2_2': 'Slow boot times and application loading; frustrating user experience.', 'review_l2_3': 'Excellent cooling system; keeps temperatures in check during extended gaming sessions.', 'review_l2_4': 'Comfortable keyboard; improved typing experience.', 'review_l2_5': 'The display lacks vibrancy and sharpness.'},
      {'qid': 'expc3q1', 'laptop_name_l1': 'laptopA', 'value_l1': 71000, 'stars_l1': 4.2, 'specs_l1': None, 'review_l1_1': 'Robust performance; handles resource-intensive tasks effortlessly.', 'review_l1_2': 'Subpar battery life; requires constant access to power.', 'review_l1_3': 'Incredible Retina display; colors are accurate, and details are stunning.', 'review_l1_4': 'Impressive audio quality; great for media consumption and content creation.', 'review_l1_5': 'Comfortable keyboard with a satisfying tactile feel.', 'laptop_name_l2': 'laptopB', 'value_l2': 64052, 'stars_l2': 3.4, 'specs_l2': None, 'review_l2_1': 'Incredibly lightweight for a laptop; great for travel.', 'review_l2_2': 'Underwhelming performance; struggles with basic tasks', 'review_l2_3': 'Good enough battery life.', 'review_l2_4': 'The stunning display provides a spacious and detailed workspace.', 'review_l2_5': "Sleek and minimalist design; a gaming laptop that doesn't scream 'gamer’"},
      {'qid': 'expc3q2', 'laptop_name_l1': 'laptopA', 'value_l1': 98456, 'stars_l1': 4.5, 'specs_l1': None, 'review_l1_1': 'Fast refresh rate display for smooth visuals.', 'review_l1_2': 'Limited connectivity options; lacks modern ports like USB-C', 'review_l1_3': 'Bright and vivid display with slim bezels; immersive multimedia experience.', 'review_l1_4': 'Sluggish hard drive results in slow boot times and file access', 'review_l1_5': 'Strong performance; handles everyday tasks and multitasking effortlessly', 'laptop_name_l2': 'laptopB', 'value_l2': 78200, 'stars_l2': 3.8, 'specs_l2': None, 'review_l2_1': 'Decent performance for productivity tasks and content consumption.', 'review_l2_2': 'Low-resolution display with poor viewing angles', 'review_l2_3': 'Impressive battery life; lasts a full workday without needing a charge', 'review_l2_4': 'The ultra-lightweight design makes it ideal for traveling professionals like me', 'review_l2_5': 'Below-average audio quality; tinny and lacking bass.'},
      {'qid': 'expc4q1', 'laptop_name_l1': 'laptopA', 'value_l1': 150412, 'stars_l1': 3.7, 'specs_l1': None, 'review_l1_1': 'The touchpad is smooth and easy to use', 'review_l1_2': 'Dim and lackluster display; colors appear muted', 'review_l1_3': 'Great for highly intensive and memory-demanding work.', 'review_l1_4': 'Responsive and comfortable keyboard for extended typing sessions', 'review_l1_5': 'Ample RAM allows for seamless multitasking; running multiple applications simultaneously is a breeze.', 'laptop_name_l2': 'laptopB', 'value_l2': 75405, 'stars_l2': 4.1, 'specs_l2': None, 'review_l2_1': 'Outdated design and build; lacks the modern aesthetics of competitors.', 'review_l2_2': 'Handles graphics-intensive gaming sessions and high-resolution video playback with ease.', 'review_l2_3': 'A true powerhouse! From gaming to spreadsheet calculations, this laptop excels in productivity tasks.', 'review_l2_4': "Quick response times; the laptop doesn't lag, even with several browser tabs open and resource-intensive apps running", 'review_l2_5': 'Good laptop for all kinds of tasks.'},
      {'qid': 'expc4q2', 'laptop_name_l1': 'laptopA', 'value_l1': 95477, 'stars_l1': 3.3, 'specs_l1': None, 'review_l1_1': 'My touchpad became unresponsive after 2 days of purchasing', 'review_l1_2': 'Has a good look and sleek design.', 'review_l1_3': 'I dislike the sound made by the keyboard when I type.', 'review_l1_4': 'Responsive touchpad and smooth scrolling', 'review_l1_5': 'Quiet fan operation and low heat generation', 'laptop_name_l2': 'laptopB', 'value_l2': 85400, 'stars_l2': 4.3, 'specs_l2': None, 'review_l2_1': 'No compromise on performance; handles tasks with ease', 'review_l2_2': 'My laptop refused to boot after 3 days of use', 'review_l2_3': 'Combined with a fast SSD, the laptop provides a smooth and efficient workflow', 'review_l2_4': 'The build is of poor quality. The hinge connecting the display broke within a month.', 'review_l2_5': 'The efficient cooling system maintains optimal temperatures without producing excessive fan noise'},
      {'qid': 'ctrc1q1', 'laptop_name_l1': 'laptopA', 'value_l1': 121095, 'stars_l1': 4, 'specs_l1': None, 'review_l1_1': "Webcam, speakers, and trackpad are bad. Don't buy unless you have money to buy peripherals.", 'review_l1_2': 'Best laptop for gaming while also being not too bulky', 'review_l1_3': 'Very bad design and plastic build not good and heavy', 'review_l1_4': 'Great value for money. It has all I need as a CS student with good performance.', 'review_l1_5': "It's a great laptop. Boot in less than 10 sec. Windows 11 supported. I have purchased for it my office work. It is working fine.", 'laptop_name_l2': 'laptopB', 'value_l2': 107999, 'stars_l2': 4, 'specs_l2': None, 'review_l2_1': 'High definition and high refresh rate perfect for gaming and only laptop to offer it at this price', 'review_l2_2': "Don't buy this laptop at this price, it's a ripoff much better options are available not worth it.", 'review_l2_3': 'The screen was not smooth it was flickering; it might be a manufacturing defect but still has not been replaced.', 'review_l2_4': 'Good for gaming and development tasks', 'review_l2_5': 'The best laptop for the given price and a similar specs device at this price are very rare.'},
      {'qid': 'ctrc2q1', 'laptop_name_l1': 'laptopA', 'value_l1': 89854, 'stars_l1': 3.2, 'specs_l1': None, 'review_l1_1': 'The laptop is nice and budget friendly', 'review_l1_2': 'Performance issue not able to handle software for development', 'review_l1_3': 'The cheap plastic build is easily scratched and the fingerprint magnet looks old just after months of use', 'review_l1_4': 'Cheap plastic and a sluggish CPU are not worth it, not bad for daily use but still a much better option with a little higher price', 'review_l1_5': "Very bad screen doesn't look that good. It is slow and not worth it", 'laptop_name_l2': 'laptopB', 'value_l2': 65890, 'stars_l2': 3.2, 'specs_l2': None, 'review_l2_1': 'Good screen and speaker. It has a little low battery life and performance but best deal at this price', 'review_l2_2': 'Very bad. Cannot type on it properly and cannot be used as it has a very old gen CPU and hence returned it back.', 'review_l2_3': "Waste of money. Don't buy. Very bad performance and is not useable at all", 'review_l2_4': 'The build is not rigid. It’s very bad and has a lot of flexing, The plastic is showing cracks already. Bought it 1 year ago for multimedia purposes but the speakers are loud but not clear, and the music sounds like noise. The screen is good for watching movies but can’t do anything else.', 'review_l2_5': 'I bought it for multimedia purposes but it has been disappointing in all features'},
      {'qid': 'ctrc3q1', 'laptop_name_l1': 'laptopA', 'value_l1': 91400, 'stars_l1': 4.5, 'specs_l1': None, 'review_l1_1': 'Battery life is bad not even 2 hours on battery needs to be plugged into the wall constantly to give decent performance.', 'review_l1_2': 'Nice design and RGB perfect for gaming; high performance and good refresh rate', 'review_l1_3': 'It has decent speakers and a trackpad bonus for a very good gaming laptop with high specs', 'review_l1_4': 'The display has a high refresh rate but viewing angles are less and not color accurate good bad for outdoor use: but good for gaming', 'review_l1_5': 'Nice performance able to handle challenging games at max settings', 'laptop_name_l2': 'laptopB', 'value_l2': 82989, 'stars_l2': 4.5, 'specs_l2': None, 'review_l2_1': 'The processing power of this device is seriously impressive. It is able to do heavy-duty tasks effortlessly', 'review_l2_2': 'Battery life is fantastic, lasting through long workdays or streaming sessions without needing a recharge.', 'review_l2_3': 'Graphics performance is good; perfect for both gamers and professionals.', 'review_l2_4': 'Sturdy build quality gives a sense of reliability; it feels like it can withstand everyday wear and tear.', 'review_l2_5': 'My unit, maybe not for everyone, tends to heat up quite a bit during intense use, which can be uncomfortable and concerning.'},
      {'qid': 'ctrc4q1', 'laptop_name_l1': 'laptopA', 'value_l1': 91400, 'stars_l1': 3.2, 'specs_l1': None, 'review_l1_1': 'Nice design with colorful lights, perfect for gaming.', 'review_l1_2': 'The display lacks accuracy and angles are not good for use outside.', 'review_l1_3': 'Battery life is really poor, barely lasting 2 hours without being plugged in.', 'review_l1_4': 'Display great for gaming but not ideal for outdoors due to limited angles.', 'review_l1_5': 'Handles tough games smoothly with top-notch performance.', 'laptop_name_l2': 'laptopB', 'value_l2': 82000, 'stars_l2': 3.2, 'specs_l2': None, 'review_l2_1': 'Impressive processing power effortlessly tackles heavy tasks.', 'review_l2_2': "The unit's tendency to heat up during intense tasks could be uncomfortable for some users.", 'review_l2_3': 'Reliable build quality feels sturdy and durable.', 'review_l2_4': 'Battery life is fantastic for work but tends to heat up during heavy use, which might concern some users.', 'review_l2_5': 'Good graphics performance, suitable for both gamers and professionals.'},
      {'qid': 'papc1q1', 'laptop_name_l1': 'laptopA', 'value_l1': 150000, 'stars_l1': 4, 'specs_l1': None, 'review_l1_1': 'Good purchase for this price', 'review_l1_2': 'The audio quality is very bad, can barely hear from the speakers', 'review_l1_3': 'Commendable battery life', 'review_l1_4': 'Bulky and heavy; not practical for on-the-go use.', 'review_l1_5': "Bought this for my son, he thinks it's great", 'laptop_name_l2': 'laptopB', 'value_l2': 150000, 'stars_l2': 4, 'specs_l2': None, 'review_l2_1': "Random freezes and crashes make using this laptop a nightmare. It's as if it has a mind of its own, deciding when it's time to stop working", 'review_l2_2': 'Large storage capacity ensures all files and projects can be kept on the laptop for quick access.', 'review_l2_3': 'I love its minimalistic and sleek design', 'review_l2_4': "Out of the box, this laptop is drowning in bloatware. It's like a digital obstacle course trying to remove all the unnecessary apps and tools", 'review_l2_5': "This laptop is painfully slow! Simple tasks like opening a web browser or file explorer take forever. It's like watching paint dry."},
      {'qid': 'papc1q2', 'laptop_name_l1': 'laptopA', 'value_l1': 75000, 'stars_l1': 4, 'specs_l1': None, 'review_l1_1': 'Lightweight and portable, making it an ideal travel companion for both work and leisure', 'review_l1_2': "Why does this laptop only have one USB port? Seriously? It's 2023, and I have to choose between charging my device or connecting a peripheral. Unbelievable.", 'review_l1_3': "No USB-C port in this day and age? It's like they are intentionally trying to make this laptop outdated. Connectivity options are stuck in the past", 'review_l1_4': 'The display is a letdown; colors are washed out, and the viewing angles are terrible. Watching videos or working on this laptop is a visually unpleasant experience', 'review_l1_5': "The speakers are a joke. The sound is tinny and lacks any depth. Even at max volume, it feels like you're listening through a cheap headset.", 'laptop_name_l2': 'laptopB', 'value_l2': 750000, 'stars_l2': 4, 'specs_l2': None, 'review_l2_1': 'Speedy performance. Never lets me down.', 'review_l2_2': 'The battery on this thing is a joke. You can forget about working remotely or taking it on a long flight without a charger', 'review_l2_3': 'The sound quality on this laptop is top-notch.', 'review_l2_4': 'The display is great. The colors are vibrant, and the high resolution ensures sharp details. Watching movies or editing photos is an absolute delight.', 'review_l2_5': "The laptop's sleek aluminum body exudes sophistication. It feels robust and well-built, making every interaction a pleasure"},
      {'qid': 'papc2q1', 'laptop_name_l1': 'laptopA', 'value_l1': 69000, 'stars_l1': 4.2, 'specs_l1': None, 'review_l1_1': 'Has great sound quality.', 'review_l1_2': 'Lightweight and looks great!', 'review_l1_3': 'The quick charging feature is a game-changer. A short charging session provides a significant boost, ensuring I spend more time using the laptop than waiting for it to charge', 'review_l1_4': 'A great selection of ports, including USB-C, HDMI, and an SD card slot.', 'review_l1_5': 'The colors on the display look washed out and pale in comparison to other laptops', 'laptop_name_l2': 'laptopB', 'value_l2': 690000, 'stars_l2': 3.4, 'specs_l2': None, 'review_l2_1': 'Lack of USB ports.', 'review_l2_2': 'Good product', 'review_l2_3': "Its aluminum body makes sure it's light and portable.", 'review_l2_4': 'Great sound quality.', 'review_l2_5': 'Have had it for 2 years now with not a single issue'},
      {'qid': 'papc2q2', 'laptop_name_l1': 'laptopA', 'value_l1': 84500, 'stars_l1': 3.3, 'specs_l1': None, 'review_l1_1': 'Vibrant display makes consuming content enjoyable', 'review_l1_2': 'Bought it 2 days ago and the speakers sound very full of static', 'review_l1_3': "The battery doesn't last longer than an hour with continuous use.", 'review_l1_4': 'The ample RAM and powerful processor make multitasking a breeze.', 'review_l1_5': 'The laptop has a speedy performance. Applications launch in the blink of an eye, and multitasking is seamless.', 'laptop_name_l2': 'laptopB', 'value_l2': 845000, 'stars_l2': 4.3, 'specs_l2': None, 'review_l2_1': 'Bought it for my office work. No complaints till now', 'review_l2_2': 'The hinges creak and wobble, making me question its durability. Definitely not built to last.', 'review_l2_3': 'Great multimedia experience; the vibrant display and powerful speakers make it perfect for streaming movies and music.', 'review_l2_4': 'Perfect for students! The lightweight design, long battery life, and powerful processing make it a reliable companion for lectures, note-taking, and research.', 'review_l2_5': "The design is an eyesore. It's like they took inspiration from the '90s and tried to bring it into the 21st century. The color choices and overall look are just tacky."}]
    Routine small_break
    Routine trial
  LoopTerminator questions
  Routine end_task_msg
